PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s' % (expInfo['participant'])
  Experiment info = {'participant': '1', 'Gender': 'f', 'Age': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = RL
  keyboardBackend = PsychToolbox
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Routines
  Routine instru
    ImageComponent instru_img1
      image = pic/intro1.png
      size = (1.6,1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent instru_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    ImageComponent image
      image = pic/end.png
      size = (0.661,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine rest
    ImageComponent rest_image
      image = pic/rest.png
      size = (0.857, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent rest_response
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_rest
      Code Type = Auto->JS
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      Begin Routine:
        if trialsN == 0 or trialsN % 75 != 0:
            continueRoutine = False
  Routine choose
    ImageComponent red
      image = pic/red.png
      pos = (-0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent green
      image = pic/green.png
      pos = (0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent yellow
      image = pic/yellow.png
      pos = (-0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent blue
      image = pic/blue.png
      pos = (0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent choose_bandit
      allowedKeys = 'r', 'f', 'i', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent choose_code
      Code Type = Py
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      Before Experiment:
        trialsN = 0
        import numpy as np
        import random
        #vnml=np.random.normal(loc=0,scale=2.8,size=150)
        #vzhengshu=np.round(vnml)#生成噪声v的高斯分布数列并四舍五入取整（same with原论文
        #vshuzi=vzhengshu.tolist()
        #v1=random.sample(vshuzi,1)
        #v=v1[0]
        #tempArray = ['bandit0']
        #random.shuffle(tempArray)
        #expect_which = locals()[tempArray[0]]

        class delta_rule():
            def __init__(self,beta=0.04,lr=0.5):
                self.Q_value_table = np.ones((1,4)).squeeze()*50
                self.ACTION = np.array([0,1,2,3])
                self.beta = beta
                self.lr = lr
            def P_action_softmax(self,action):
                return np.exp(self.Q_value_table[action]*self.beta)/(np.exp(self.Q_value_table[0]*self.beta)+np.exp(self.Q_value_table[1]*self.beta)+np.exp(self.Q_value_table[2]*self.beta)+np.exp(self.Q_value_table[3]*self.beta))

            def sample_softmax(self):
                Prob = np.array([self.P_action_softmax(0),self.P_action_softmax(1),self.P_action_softmax(2),self.P_action_softmax(3)])
                return np.random.choice(a=self.ACTION,size=1,replace=True,p=Prob)
            def learn(self,action,reward):
                self.Q_value_table[action] = self.Q_value_table[action]+self.lr*(reward-self.Q_value_table[action])

        lists = [random.uniform(25,45),random.uniform(35,55) ,random.uniform(45,65) ,random.uniform(55,75)]

        random.shuffle(lists)

        uyestart = lists[0]
        ubluestart = lists[1]
        ugreenstart = lists[2]
        uredstart = lists[3]

        #均值起始值
        B_start = [random.uniform(25,45) ,random.uniform(35,55) ,random.uniform(45,65) ,random.uniform(55,75)]

        decaypara=0.9836
        decaycenter=50

        B_agent = delta_rule(beta=0.06,lr=0.5)
      Begin Routine:
        import random
        #vnml=np.random.normal(loc=0,scale=2.8,size=150)
        #vzhengshu=np.round(vnml)#生成噪声v的高斯分布数列并四舍五入取整（same with原论文
        #vshuzi=vzhengshu.tolist()
        #v1=random.sample(vshuzi,1)
        #v=v1[0]
        #tempArray = ['bandit0','black_x_pos_random','black_y_pos_random']
        #random.shuffle(tempArray)
        #expect_which = locals()[tempArray[0]]
        #black_x_random= locals()[tempArray[1]]
        #black_y_random = locals()[tempArray[2]]

        import random
        expect_which = random.choice([0,1,2,3])
        black_x_random= random.choice([-0.6,-0.2,0.2,0.6])
        #black_y_random = random.choice([-0.225,0.225])
      End Routine:
        trialsN = trialsN + 1
    TextComponent Fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine wrongsign
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if (choose_bandit.keys == 'r')|(choose_bandit.keys == 'f') | (choose_bandit.keys == 'i') | (choose_bandit.keys == 'j'):
            i=0
            continueRoutine = False
        else:
            i=6
            continueRoutine = True
    TextComponent bigx
      color = red
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $i
      text [set every repeat] = ×
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  Routine intertrial
    TextComponent intertrialfix
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $intertrialtime
      text = +
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np
        intertrialtime = np.random.normal(2, 1)
        while (intertrialtime < 1.5) | (intertrialtime > 2):
            intertrialtime = np.random.normal(2,1)
  Routine cr_2
  Routine slide_2
  Routine comparison_result
    CodeComponent comparisonresult_code
      Code Type = Py
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      Begin Routine:
        if (choose_bandit.keys == 'r')|(choose_bandit.keys == 'f') | (choose_bandit.keys == 'i') | (choose_bandit.keys == 'j'):
            continueRoutine = True
        else:
            continueRoutine = False
        import numpy as np
        B_action = B_agent.sample_softmax()
        if B_action == 0:
            B_reward = int(np.random.normal(B_0,4,1))
        elif B_action == 1:
            B_reward = int(np.random.normal(B_1,4,1))
        elif B_action == 2:
            B_reward = int(np.random.normal(B_2,4,1))
        else :
            B_reward = int(np.random.normal(B_3,4,1))

        B_agent.learn(B_action,B_reward)
        if (choose_bandit.keys == 'r')|(choose_bandit.keys == 'f') | (choose_bandit.keys == 'i') | (choose_bandit.keys == 'j'):
            a = points
            j = B_reward
        else:
            a = 0
            j = '**'
        jlist=[]
        alist=[]
        jlist.append(j)
        alist.append(a)
      End Routine:
        uyestart = uyellow
        uredstart = ured
        ubluestart = ublue
        ugreenstart = ugreen
        B_start[0] = B_0
        B_start[1] = B_1
        B_start[2] = B_2
        B_start[3] = B_3
    ImageComponent black_com
      image = pic/black.png
      pos [set every repeat] = (black_x_pos, black_y_pos)
      size = 0.33
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent reward_sub
      image = pic/rewardsub.png
      mask = none
      pos = (-0.215, 0.3)
      size = (0.365,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent palyerb
      image = pic/rewardpB.png
      mask = none
      pos = (0.215, 0.3)
      size = (0.427,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent reward__sub
      letterHeight = 0.05
      pos = (-0.15, 0.305)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $a
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    TextComponent compare
      letterHeight = 0.05
      pos = (0.321, 0.305)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $j
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    ImageComponent red_compare
      image = pic/red.png
      pos = (-0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent green_com
      image = pic/green.png
      pos = (0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent yellow_com
      image = pic/yellow.png
      pos = (-0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent blue_com
      image = pic/blue.png
      pos = (0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine instr2
    ImageComponent instru_img2
      image = pic/intro22.png
      size = (1.67,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instru_resp2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wrongsign1
    TextComponent bigx1
      color = red
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = ×
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    CodeComponent wrongsigncode
      Code Type = Auto->JS
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      Begin Routine:
        if (choose_bandit.keys == 'r')|(choose_bandit.keys == 'f') | (choose_bandit.keys == 'i') | (choose_bandit.keys == 'j'):
            continueRoutine = False
        else:
            continueRoutine = True
  Routine fixbefore
    TextComponent fixbefore_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine expect
    CodeComponent expect_self_code
      Code Type = Auto->JS
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      Begin Routine:
        if (choose_bandit.keys == 'r' or choose_bandit.keys == 'f' or choose_bandit.keys == 'i' or choose_bandit.keys == 'j') and(expect_which==0):
            continueRoutine = True
        else:
            continueRoutine = False
      End Routine:
        thisExp.addData('value_expect_self',expectself.text)
    ImageComponent expect_self_black
      image [set every repeat] = pic/black.png
      pos [set every repeat] = (black_x_pos, black_y_pos)
      size = 0.33
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_self
      image = pic/expect_self.png
      pos = (0, 0.3)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_self_red
      image [set every repeat] = pic/red.png
      pos = (-0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_self_green
      image [set every repeat] = pic/green.png
      pos = (0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_self_yellow
      image [set every repeat] = pic/yellow.png
      pos = (-0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_self_blue
      image [set every repeat] = pic/blue.png
      pos = (0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent tijiao
      image = pic/tijiao.png
      pos = (0, -0.3)
      size = (0.38, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    TextboxComponent expectself
      bold = False
      editable = True
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0.10, 0.25)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    MouseComponent tijiao_click
      clickable = tijiao
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine confidence
    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5,6,7,8,9,10,11)
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7,8,9,10,11)
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    ImageComponent image_7
      image = pic/confi.png
      pos = (0, 0.2)
      size = (0.67, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if (choose_bandit.keys == 'r' or choose_bandit.keys == 'f' or choose_bandit.keys == 'i' or choose_bandit.keys == 'j')and(expect_which==1 or expect_which==0) :#and(expect_which==0)
            continueRoutine = True
        else:
            continueRoutine = False
    ImageComponent confi
      image = pic/confiden.png
      pos = (0.7, 0)
      size = (0.229, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent notconfi
      image = pic/randomguessingpng.png
      pos = (-0.7, -0.01)
      size = (0.229, 0.2)
      startVal [time (s)] = 0.0
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  Routine expectB
    ImageComponent image_8
      image = pic/expect_B.png
      size = (1.19, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    TextboxComponent expectB_2
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0.15, -0.07)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    CodeComponent expectb
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('random_whicharm', black_x_random)
        #if (choose_bandit.keys == 'r' or choose_bandit.keys == 'f' or choose_bandit.keys == 'i' or choose_bandit.keys == 'j'): #and(expect_which==0)
        #    continueRoutine = True
        #else:
        continueRoutine = False
      End Routine:
        #thisExp.addData('shuru',expectB_2.text)
    ImageComponent tijiao_B_2
      image = pic/tijiao.png
      pos = (0, -0.3)
      size = (0.38, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    MouseComponent tijiao_B
      clickable = tijiao
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine expect_random
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if (choose_bandit.keys == 'r' or choose_bandit.keys == 'f' or choose_bandit.keys == 'i' or choose_bandit.keys == 'j') and(expect_which==1):
            continueRoutine = True
        else:
            continueRoutine = False

        import random
        black_x_random= random.choice([-0.6,-0.2,0.2,0.6])
        #
        #thisExp.addData('value_expect_random',expect_random_value.text)
        thisExp.addData('random_whicharm', black_x_random)
        thisExp.addData('whether_ask', expect_which)
    ImageComponent jiantou_random
      image [set every repeat] = pic/jiantou.png
      pos [set every repeat] = (black_x_random, 0.2)
      size = (0.077,0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_red
      image [set every repeat] = pic/red.png
      pos = (-0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_green
      image [set every repeat] = pic/green.png
      pos = (0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_yellow
      image [set every repeat] = pic/yellow.png
      pos = (-0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_blue
      image [set every repeat] = pic/blue.png
      pos = (0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_random_2
      image = pic/random_expect.png
      pos = (0, 0.35)
      size = (0.72, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    TextboxComponent expect_random_3
      bold = False
      editable = True
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0.1, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent tijiao_random_2
      image = pic/tijiao.png
      pos = (0, -0.3)
      size = (0.38, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    MouseComponent tijiao_random
      clickable = tijiao
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine happy_rating
    CodeComponent randomwalk
      Code Type = Auto->JS
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      Begin Routine:
        if (choose_bandit.keys == 'r' or choose_bandit.keys == 'f' or choose_bandit.keys == 'i' or choose_bandit.keys == 'j') and(expect_which==2 or expect_which==3):
            continueRoutine = True
        else:
            continueRoutine = False
      End Routine:
        thisExp.addData('rewardyellow', str(rewardyellowlist[0]))
        thisExp.addData('rewardred', str(rewardredlist[0]))
        thisExp.addData('rewardblue', str(rewardbluelist[0]))
        thisExp.addData('rewardgreen', str(rewardgreenlist[0]))
        thisExp.addData('subchoose', str(alist[0]))
        thisExp.addData('playerb', str(jlist[0]))
    ImageComponent image_3
      image = pic/happychoose.png
      pos = (0, 0.2)
      size = (0.57, 0.1)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1,2,3,4,5,6,7)
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = pic/happy.png
      pos = (0.7, 0)
      size = (0.183, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image = pic/sad.png
      pos = (-0.7, 0)
      size = (0.217, 0.2)
      startVal [time (s)] = 0.0
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  Routine choose_result
    CodeComponent result_code
      Code Type = Py
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      Begin Routine:
        uyellow = uyestart*decaypara+(1-decaypara)*decaycenter + np.random.normal(0,2.8,1)
        ured = uredstart*decaypara+(1-decaypara)*decaycenter + np.random.normal(0,2.8,1)
        ublue = ubluestart*decaypara+(1-decaypara)*decaycenter + np.random.normal(0,2.8,1)
        ugreen = ugreenstart*decaypara+(1-decaypara)*decaycenter + np.random.normal(0,2.8,1)
        B_0 = B_start[0]*decaypara+(1-decaypara)*decaycenter + np.random.normal(0,2.8,1)
        B_1 = B_start[1]*decaypara+(1-decaypara)*decaycenter + np.random.normal(0,2.8,1)
        B_2 = B_start[2]*decaypara+(1-decaypara)*decaycenter + np.random.normal(0,2.8,1)
        B_3 = B_start[3]*decaypara+(1-decaypara)*decaycenter + np.random.normal(0,2.8,1)
        import random
        if trialsN == 1:
            rewardyellow=np.random.normal(uyestart,4,1)
            rewardred=np.random.normal(uredstart,4,1)
            rewardblue=np.random.normal(ubluestart,4,1)
            rewardgreen=np.random.normal(ugreenstart,4,1)
            #trial 1 时是初始值，所以不需要加噪声。这里的1是从这个分布里取出“1”个数字的意思
        else:
            rewardyellow=np.random.normal(uyellow,4,1)
            rewardred=np.random.normal(ured,4,1)
            rewardblue=np.random.normal(ublue,4,1)
            rewardgreen=np.random.normal(ugreen,4,1)
        #定义每个bandit的reward
        z = np.random.uniform(0.8,2)#生成随机小数作为result的duration
        f = z+0.3#图片呈现时间

        if choose_bandit.keys == 'r':#如果被试选择某一个bandit，就显示对应的值
            black_x_pos = -0.6
            black_y_pos = 0.
            docs_x_pos = -0.6
            docs_y_pos = 0
            points = int(np.round(rewardyellow))
            ss = 300
        elif choose_bandit.keys == 'f':
            black_x_pos = -0.2
            black_y_pos = 0
            docs_x_pos = -0.2
            docs_y_pos = 0
            ss = 300
            points = int(np.round(rewardred))
        elif choose_bandit.keys == 'i':
            black_x_pos = 0.2
            black_y_pos = 0
            docs_x_pos = 0.2
            docs_y_pos = 0
            ss = 300
            points = int(np.round(rewardblue))
        elif choose_bandit.keys == 'j':
            black_x_pos = 0.6
            black_y_pos = 0
            docs_x_pos = 0.6
            docs_y_pos = 0
            ss = 300
            points = int(np.round(rewardgreen))
        else:
            black_x_pos = 9
            black_y_pos = 9
            ss = 0
            continueRoutine = False

        fix_time = 1.5
        rewardyellowlist=[]
        rewardredlist=[]
        rewardbluelist=[]
        rewardgreenlist=[]
        rewardyellowlist.append(int(np.round(rewardyellow)))
        rewardredlist.append(int(np.round(rewardred)))
        rewardbluelist.append(int(np.round(rewardblue)))
        rewardgreenlist.append(int(np.round(rewardgreen)))
    ImageComponent black
      image [set every repeat] = pic/black.png
      pos [set every repeat] = (black_x_pos, black_y_pos)
      size = 0.33
      startVal [time (s)] = 0
      stopVal [duration (s)] = $f
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    ImageComponent red_2
      image [set every repeat] = pic/red.png
      pos = (-0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    ImageComponent green_2
      image [set every repeat] = pic/green.png
      pos = (0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    ImageComponent yellow_2
      image [set every repeat] = pic/yellow.png
      pos = (-0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    ImageComponent blue_2
      image [set every repeat] = pic/blue.png
      pos = (0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    TextComponent fixation_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
      text [set every repeat] = +
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    TextComponent docs
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (docs_x_pos,docs_y_pos)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $z
      text [set every repeat] = ● ● ●
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    ImageComponent wait_playerB
      image [set every repeat] = pic/waitplayerB.png
      pos = (0, 0.3)
      size = (0.51, 0.1)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $z
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  Routine instru3
    ImageComponent image_6
      image = pic/instru3.png
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instru
  Routine instr2
  Routine fixbefore
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sequence.xlsx
    loopType = sequential
    nReps = 150
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    conditions:
      [{'bandit0': 1, 'black_x_pos_random': -0.3, 'black_y_pos_random': -0.225},
      {'bandit0': 0, 'black_x_pos_random': 0.3, 'black_y_pos_random': 0.225},
      {'bandit0': 1, 'black_x_pos_random': -0.3, 'black_y_pos_random': -0.225},
      {'bandit0': 0, 'black_x_pos_random': 0.3, 'black_y_pos_random': 0.225},
      {'bandit0': 1, 'black_x_pos_random': -0.3, 'black_y_pos_random': -0.225},
      {'bandit0': 0, 'black_x_pos_random': 0.3, 'black_y_pos_random': 0.225},
      {'bandit0': 1, 'black_x_pos_random': -0.3, 'black_y_pos_random': -0.225},
      {'bandit0': 0, 'black_x_pos_random': 0.3, 'black_y_pos_random': 0.225},
      {'bandit0': 1, 'black_x_pos_random': -0.3, 'black_y_pos_random': -0.225},
      {'bandit0': 0, 'black_x_pos_random': 0.3, 'black_y_pos_random': 0.225},
      {'bandit0': 1, 'black_x_pos_random': -0.3, 'black_y_pos_random': -0.225},
      {'bandit0': 0, 'black_x_pos_random': 0.3, 'black_y_pos_random': 0.225},
      {'bandit0': 1, 'black_x_pos_random': -0.3, 'black_y_pos_random': -0.225},
      {'bandit0': 0, 'black_x_pos_random': 0.3, 'black_y_pos_random': 0.225},
      {'bandit0': 1, 'black_x_pos_random': -0.3, 'black_y_pos_random': -0.225},
      {'bandit0': 0, 'black_x_pos_random': 0.3, 'black_y_pos_random': 0.225},
      {'bandit0': 1, 'black_x_pos_random': -0.3, 'black_y_pos_random': -0.225},
      {'bandit0': 0, 'black_x_pos_random': 0.3, 'black_y_pos_random': 0.225},
      {'bandit0': 1, 'black_x_pos_random': -0.3, 'black_y_pos_random': -0.225},
      {'bandit0': 0, 'black_x_pos_random': 0.3, 'black_y_pos_random': 0.225},
      {'bandit0': 1, 'black_x_pos_random': -0.3, 'black_y_pos_random': -0.225}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
    Routine rest
    Routine choose
    Routine choose_result
    Routine comparison_result
    Routine happy_rating
    Routine expect
    Routine expect_random
    Routine confidence
    Routine wrongsign
    Routine intertrial
  LoopTerminator trials
  Routine end
