PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s' % (expInfo['participant'])
  Experiment info = {'participant': '1', 'Gender': 'f', 'Age': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = RL
  keyboardBackend = PsychToolbox
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Routines
  Routine instru
    ImageComponent instru_img1
      image = pic/intro1.png
      size = (1.6,1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent instru_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    ImageComponent image
      image = pic/end.png
      size = (0.661,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine rest
    ImageComponent rest_image
      image = pic/rest.png
      size = (0.857, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent rest_response
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_rest
      Code Type = Auto->JS
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      Begin Routine:
        if trialsN == 0 or trialsN % 75 != 0:
            continueRoutine = False
  Routine choose
    ImageComponent red
      image = pic/red.png
      pos = (-0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent green
      image = pic/green.png
      pos = (0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent yellow
      image = pic/yellow.png
      pos = (-0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent blue
      image = pic/blue.png
      pos = (0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent choose_bandit
      allowedKeys = 'r', 'f', 'i', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent choose_code
      Code Type = Py
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      Before Experiment:
        trialsN = 0
        import random
        tempArray = ["arm1", "arm2", "arm3", "arm4"]
        random.shuffle(tempArray)
      End Routine:
        trialsN = trialsN + 1
    TextComponent Fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine wrongsign
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if (choose_bandit.keys == 'r')|(choose_bandit.keys == 'f') | (choose_bandit.keys == 'i') | (choose_bandit.keys == 'j'):
            i=0
            continueRoutine = False
        else:
            i=6
            continueRoutine = True
    TextComponent bigx
      color = red
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $i
      text [set every repeat] = ×
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  Routine intertrial
    TextComponent intertrialfix
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $intertrialtime
      text = +
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np
        intertrialtime = np.random.normal(2, 1)
        while (intertrialtime < 1.5) | (intertrialtime > 2):
            intertrialtime = np.random.normal(2,1)
  Routine cr_2
  Routine slide_2
  Routine instr2
    ImageComponent instru_img2
      image = pic/intro22.png
      size = (1.67,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instru_resp2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wrongsign1
    TextComponent bigx1
      color = red
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = ×
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    CodeComponent wrongsigncode
      Code Type = Auto->JS
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      Begin Routine:
        if (choose_bandit.keys == 'r')|(choose_bandit.keys == 'f') | (choose_bandit.keys == 'i') | (choose_bandit.keys == 'j'):
            continueRoutine = False
        else:
            continueRoutine = True
  Routine fixbefore
    TextComponent fixbefore_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine expect
    TextboxComponent expectself
      bold = False
      editable = True
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0.10, 0.25)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    CodeComponent expect_self_code
      Code Type = Py
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      Begin Routine:
        if (choose_bandit.keys == 'r' or choose_bandit.keys == 'f' or choose_bandit.keys == 'i' or choose_bandit.keys == 'j') and(expect_which==0):
            continueRoutine = True
        else:
            continueRoutine = False
      Each Frame:
        if tijiao_click.isPressedIn(tijiao):
            if expectself.text.isdigit() and (len(expectself.text.strip()) == 2 or len(expectself.text.strip()) == 1):
                clicked = tijiao
            else:
                clicked = check
                #
             #        if len(expectself.text.strip()) == 2 :
                #.All(Char.IsDigit)
      End Routine:
        thisExp.addData('value_expect_self',expectself.text)
    ImageComponent expect_self_black
      image [set every repeat] = pic/black.png
      pos [set every repeat] = (black_x_pos, black_y_pos)
      size = 0.33
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_self
      image = pic/expect_self.png
      pos = (0, 0.3)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_self_red
      image [set every repeat] = pic/red.png
      pos = (-0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_self_green
      image [set every repeat] = pic/green.png
      pos = (0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_self_yellow
      image [set every repeat] = pic/yellow.png
      pos = (-0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_self_blue
      image [set every repeat] = pic/blue.png
      pos = (0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent tijiao
      image = pic/tijiao.png
      pos = (0, -0.3)
      size = (0.38, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    MouseComponent tijiao_click
      clickable = clicked
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent check
      image = pic/confid.png
      pos = (100, 0)
      size = (0.001, 0.001)
      startVal [time (s)] = 0.0
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  Routine confidence
    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5,6,7,8,9,10,11)
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7,8,9,10,11)
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    ImageComponent image_7
      image = pic/confi.png
      pos = (0, 0.2)
      size = (0.67, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if (choose_bandit.keys == 'r' or choose_bandit.keys == 'f' or choose_bandit.keys == 'i' or choose_bandit.keys == 'j')and(expect_which==1 or expect_which==0) :#and(expect_which==0)
            continueRoutine = True
        else:
            continueRoutine = False
    ImageComponent confi
      image = pic/confiden.png
      pos = (0.7, 0)
      size = (0.229, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent notconfi
      image = pic/randomguessingpng.png
      pos = (-0.7, -0.01)
      size = (0.229, 0.2)
      startVal [time (s)] = 0.0
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  Routine expectB
    ImageComponent image_8
      image = pic/expect_B.png
      size = (1.19, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    TextboxComponent expectB_2
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0.15, -0.07)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    CodeComponent expectb
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('random_whicharm', black_x_random)
        #if (choose_bandit.keys == 'r' or choose_bandit.keys == 'f' or choose_bandit.keys == 'i' or choose_bandit.keys == 'j'): #and(expect_which==0)
        #    continueRoutine = True
        #else:
        continueRoutine = False
      End Routine:
        #thisExp.addData('shuru',expectB_2.text)
    ImageComponent tijiao_B_2
      image = pic/tijiao.png
      pos = (0, -0.3)
      size = (0.38, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    MouseComponent tijiao_B
      clickable = tijiao
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine expect_random
    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        if (choose_bandit.keys == 'r' or choose_bandit.keys == 'f' or choose_bandit.keys == 'i' or choose_bandit.keys == 'j') and(expect_which==1):
            continueRoutine = True
        else:
            continueRoutine = False

        import random
        black_x_random= random.choice([-0.6,-0.2,0.2,0.6])
        #
        #thisExp.addData('value_expect_random',expect_random_value.text)
        thisExp.addData('random_whicharm', black_x_random)
        thisExp.addData('whether_ask', expect_which)
      Each Frame:
        if tijiao_random.isPressedIn(tijiao_random_2):
            if expect_random_3.text.isdigit() and (len(expect_random_3.text.strip()) == 2 or len(expect_random_3.text.strip()) == 1):
                click = tijiao_random_2
            else:
                click = check
                #
             #        if len(expectself.text.strip()) == 2 :
                #.All(Char.IsDigit)
    ImageComponent jiantou_random
      image [set every repeat] = pic/jiantou.png
      pos [set every repeat] = (black_x_random, 0.2)
      size = (0.077,0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_red
      image [set every repeat] = pic/red.png
      pos = (-0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_green
      image [set every repeat] = pic/green.png
      pos = (0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_yellow
      image [set every repeat] = pic/yellow.png
      pos = (-0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_blue
      image [set every repeat] = pic/blue.png
      pos = (0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent expect_random_2
      image = pic/random_expect.png
      pos = (0, 0.35)
      size = (0.72, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    TextboxComponent expect_random_3
      bold = False
      editable = True
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0.1, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    ImageComponent tijiao_random_2
      image = pic/tijiao.png
      pos = (0, -0.3)
      size = (0.38, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ss
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    MouseComponent tijiao_random
      clickable = click
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent check_2
      image = pic/confid.png
      pos = (100, 0)
      size = (0.001, 0.001)
      startVal [time (s)] = 0.0
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  Routine happy_rating
    CodeComponent randomwalk
      Code Type = Auto->JS
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      Begin Routine:
        if (choose_bandit.keys == 'r' or choose_bandit.keys == 'f' or choose_bandit.keys == 'i' or choose_bandit.keys == 'j') and(expect_which==2 or expect_which==3):
            continueRoutine = True
        else:
            continueRoutine = False
      End Routine:
        thisExp.addData('rewardyellow', str(rewardyellowlist[0]))
        thisExp.addData('rewardred', str(rewardredlist[0]))
        thisExp.addData('rewardblue', str(rewardbluelist[0]))
        thisExp.addData('rewardgreen', str(rewardgreenlist[0]))
        thisExp.addData('subchoose', str(alist[0]))
        thisExp.addData('playerb', str(jlist[0]))
    ImageComponent image_3
      image = pic/happychoose.png
      pos = (0, 0.2)
      size = (0.57, 0.1)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1,2,3,4,5,6,7)
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = pic/happy.png
      pos = (0.7, 0)
      size = (0.183, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image = pic/sad.png
      pos = (-0.7, 0)
      size = (0.217, 0.2)
      startVal [time (s)] = 0.0
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  Routine choose_result
    CodeComponent result_code
      Code Type = Py
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      Begin Routine:
        import random
        if (choose_bandit.keys == 'r')|(choose_bandit.keys == 'f') | (choose_bandit.keys == 'i') | (choose_bandit.keys == 'j'):
            z = np.random.uniform(0.8,2)#生成随机小数作为result的duration
            f = z+0.3#图片呈现时间
        else:
            f=0
            continueRoutine = False

        redpoints = locals()[tempArray[0]]
        greenpoints = locals()[tempArray[1]]
        bluepoints = locals()[tempArray[2]]
        yellowpoints = locals()[tempArray[3]]
        if choose_bandit.keys == 'r':#如果被试选择某一个bandit，就显示对应的值
            black_x_pos = -0.6
            black_y_pos = 0.
            docs_x_pos = -0.6
            docs_y_pos = 0
            points = yellowpoints
            ss = 300
        elif choose_bandit.keys == 'f':
            black_x_pos = -0.2
            black_y_pos = 0
            docs_x_pos = -0.2
            docs_y_pos = 0
            ss = 300
            points = redpoints
        elif choose_bandit.keys == 'i':
            black_x_pos = 0.2
            black_y_pos = 0
            docs_x_pos = 0.2
            docs_y_pos = 0
            ss = 300
            points = bluepoints
        elif choose_bandit.keys == 'j':
            black_x_pos = 0.6
            black_y_pos = 0
            docs_x_pos = 0.6
            docs_y_pos = 0
            ss = 300
            points = greenpoints
        else:
            black_x_pos = 9
            black_y_pos = 9
            ss = 0
            continueRoutine = False

        fix_time = 1.5
        rewardyellowlist=[]
        rewardredlist=[]
        rewardbluelist=[]
        rewardgreenlist=[]
        rewardyellowlist.append(yellowpoints)
        rewardredlist.append(redpoints)
        rewardbluelist.append(bluepoints)
        rewardgreenlist.append(greenpoints)
    ImageComponent black
      image [set every repeat] = pic/black.png
      pos [set every repeat] = (black_x_pos, black_y_pos)
      size = 0.33
      startVal [time (s)] = 0
      stopVal [duration (s)] = $f
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    ImageComponent red_2
      image [set every repeat] = pic/red.png
      pos = (-0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    ImageComponent green_2
      image [set every repeat] = pic/green.png
      pos = (0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    ImageComponent yellow_2
      image [set every repeat] = pic/yellow.png
      pos = (-0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    ImageComponent blue_2
      image [set every repeat] = pic/blue.png
      pos = (0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    TextComponent fixation_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
      text [set every repeat] = +
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    TextComponent docs
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (docs_x_pos,docs_y_pos)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $z
      text [set every repeat] = ● ● ●
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  Routine instru3
    ImageComponent image_6
      image = pic/instru3.png
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine result
    CodeComponent comparisonresult_code
      Code Type = Py
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      Begin Routine:
        if (choose_bandit.keys == 'r')|(choose_bandit.keys == 'f') | (choose_bandit.keys == 'i') | (choose_bandit.keys == 'j'):
            continueRoutine = True
            a = points
        else:
            continueRoutine = False
            a = 0

        alist=[]
        alist.append(a)
      End Routine:
        thisExp.addData('rewardred',redpoints)
        thisExp.addData('rewardyellow',yellowpoints)
        thisExp.addData('rewardblue',bluepoints)
        thisExp.addData('rewardgreen',greenpoints)
        thisExp.addData('subchoose',a)
    ImageComponent black_com
      image = pic/black.png
      pos [set every repeat] = (black_x_pos, black_y_pos)
      size = 0.33
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    ImageComponent reward_sub
      image = pic/rewardsub.png
      mask = none
      pos = (0, 0.3)
      size = (0.365,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    TextComponent reward__sub
      letterHeight = 0.05
      pos = (0.0647, 0.305)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
      text [set every repeat] = $a
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    ImageComponent red_compare
      image = pic/red.png
      pos = (-0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    ImageComponent green_com
      image = pic/green.png
      pos = (0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    ImageComponent yellow_com
      image = pic/yellow.png
      pos = (-0.6, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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    ImageComponent blue_com
      image = pic/blue.png
      pos = (0.2, 0)
      size = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $f
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Flow
  Routine instru
  Routine instr2
  Routine fixbefore
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = reward_distribution_e3/reward_distribution_1.csv
    loopType = sequential
    nReps = 150
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    conditions:
      [OrderedDict([('arm1', 45), ('arm2', 42), ('arm3', 50), ('arm4', 53)]),
      OrderedDict([('arm1', 32), ('arm2', 43), ('arm3', 50), ('arm4', 58)]),
      OrderedDict([('arm1', 43), ('arm2', 50), ('arm3', 57), ('arm4', 55)]),
      OrderedDict([('arm1', 42), ('arm2', 44), ('arm3', 52), ('arm4', 56)]),
      OrderedDict([('arm1', 49), ('arm2', 38), ('arm3', 49), ('arm4', 67)]),
      OrderedDict([('arm1', 44), ('arm2', 40), ('arm3', 59), ('arm4', 51)]),
      OrderedDict([('arm1', 53), ('arm2', 40), ('arm3', 54), ('arm4', 56)]),
      OrderedDict([('arm1', 58), ('arm2', 40), ('arm3', 47), ('arm4', 59)]),
      OrderedDict([('arm1', 58), ('arm2', 37), ('arm3', 56), ('arm4', 51)]),
      OrderedDict([('arm1', 52), ('arm2', 42), ('arm3', 56), ('arm4', 61)]),
      OrderedDict([('arm1', 56), ('arm2', 42), ('arm3', 59), ('arm4', 50)]),
      OrderedDict([('arm1', 52), ('arm2', 42), ('arm3', 58), ('arm4', 54)]),
      OrderedDict([('arm1', 59), ('arm2', 40), ('arm3', 70), ('arm4', 50)]),
      OrderedDict([('arm1', 54), ('arm2', 44), ('arm3', 75), ('arm4', 44)]),
      OrderedDict([('arm1', 53), ('arm2', 46), ('arm3', 78), ('arm4', 44)]),
      OrderedDict([('arm1', 50), ('arm2', 41), ('arm3', 78), ('arm4', 45)]),
      OrderedDict([('arm1', 49), ('arm2', 47), ('arm3', 77), ('arm4', 45)]),
      OrderedDict([('arm1', 45), ('arm2', 52), ('arm3', 68), ('arm4', 47)]),
      OrderedDict([('arm1', 43), ('arm2', 43), ('arm3', 67), ('arm4', 56)]),
      OrderedDict([('arm1', 40), ('arm2', 48), ('arm3', 68), ('arm4', 50)]),
      OrderedDict([('arm1', 45), ('arm2', 42), ('arm3', 46), ('arm4', 47)])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
    Routine rest
    Routine choose
    Routine choose_result
    Routine result
    Routine wrongsign
    Routine intertrial
  LoopTerminator trials
  Routine end
